//Simulation of BC3


load_file("stdgui.hoc")
// number of apical dendritic compartments 
apicalCompart = 415  // 416 for AN BC3 (apic[0] to apic[415])
//number of axonal compartment
axonCompart = 2482 //total 2483 axonal compartment(axon[0] to axon [2482])
//number of basal dendritic compartment
basalCompart= 270 //total 271 compartments (dend[0] to den[270])

stoptime = 2100
tstop = stoptime
number_of_synapse = 5 //number of excitatory synpases; 
number_of_inhibitory_synapse =12 //number of inhibitory synapses 12
E_frequency = 100
I_frequency = 100
RNG_seed = 4229

   celsius = 6.3	// C - temperature 
// temperature has no real meaning in the simulations 
// this is the def.temp in Neuron (HH. model)
// timeconstants of m, h and n are adjusted directly in the mod file





//--------------------------------------------------------------------------



Vleak = -64
Vrest = -64
axialresist = 137 // axial resistivity based on AN 2010 PNAS units ohm cm, Ri= 172.1 (Table S3)
membranecap = 1.06 // membrane capacity based on AN 2010 PNAS units: uF cm-2
dborder = 120  // 120 micrometers is border between proximal and distal dendrites, define distal versus proximal dendrites


// load the passive cable model
// topol() is not used, because this function has been embedded in the passive model hoc file and executed during loading
xopen ("DG-BasketCell3.hoc")

// define the number of segments, based on the Nseg_BC2.txt. This proc is embedded in the passive model hof file.
secdef()


// define pas, Ra and cm in all compartments
forall {insert hh_wbm gnabar_hh_wbm=0 gkbar_hh_wbm=0 gl_hh_wbm=1/6400} //Na+ and K+ conductances are initially set to 0.
//the leak condutance was 1e-4 S cm-2 (10 Kohm cm2, Hu and Jonas 2014).
forall {el_hh_wbm = -70}  //Defined the reversal potential of the leak conductance (defining the RMP).
forall {Ra = axialresist cm =membranecap}




//-------------------------------
soma distance (0, 0.5) // use soma as the reference point
forsec "apic" for (x) if ((x!=0) && (x!=1)) {dis = distance (x)
					     if (dis <= dborder) {gl_hh_wbm (x)= 1/6400}  else {gl_hh_wbm(x) = 1/12700}
										    
					    }

forsec "dend" for (x) if ((x!=0) && (x!=1)) {dis = distance (x)
					     if (dis <= dborder) {gl_hh_wbm (x)= 1/6400}  else {gl_hh_wbm(x) = 1/12700}
					    }


//-------------------------------------





//define the WB K+ conductance density 
forall {gkbar_hh_wbm= 150e-4} //A uniform density of 500e-4 mho cm-2, corresponding to 50 mS cm-2 (Hu and Jonas, 2010, Science)

//defines the WB Na+ conductance density in the soma
access soma
gnabar_hh_wbm= 1000e-4//correspoding to 100 mS cm-2 at the soma

//defines the WB Na+ conductance density in dendrites

soma distance (0, 0.5)
for a=0, apicalCompart {access apic[a]
	     gnabar_hh_wbm = 50e-4 //distal dendrites, Na+ conductance 5 ms cm-2
	     for (x) {dis = distance(x)
             if (dis<dborder) {gnabar_hh_wbm(x)=500e-4}}// proximal dendrites, Na+ conductance 50 ms cm-2
            }

for a=0, basalCompart {access dend[a]
	     gnabar_hh_wbm = 50e-4
	     for (x) {dis = distance(x)
             if (dis<dborder) {gnabar_hh_wbm(x)=500e-4}}
            }


//find the shortest distance from the soma to the axon
axondistance = 0
axonlocation  =0
soma distance (0, 0.5)
for a=0, axonCompart {access axon[a]
	      dis = distance(0.5)

					     if (dis > axondistance) {axondistance =dis 
								      axonlocation =a}
					     }
print axondistance 

//axon[0] = 40 micrometers from the cell body

//calulate the slope of axonal Na+ conductance density as a function of distance
gNa_slope = ((2000e-4)-(1500e-4))/axondistance //Na+ condutance in the axon increases form 150 mS to 200 mS in a linear fashion.

//define the WB Na+ conductance density in the axon


for a=0, axonCompart {access axon[a]
	      dis = distance(0.5)
              gnabar_hh_wbm= (dis*gNa_slope)+(1500e-4) 	}			    					    





proc init() {
	    finitialize (-70)
	    dt =0.1 }
/*
objref g
g = new Graph()
addplot (g, 0)
g.size (0, stoptime, -90, 50)
g.addvar("soma.v(0.5)", 1,1, 0.6, 0.9, 2)
//g.addvar("axon[0].v(0.5)", 2,1, 0.6, 0.9, 2)
*/

strdef graphname

//build random excitatory synapses in distal apical dendrites
print "Assign random synapses"
objref synapse[number_of_synapse] 
a = 0
objref synapse_segment, synapse_location, random_segment, random_location
random_segment = new Random(RNG_seed)
random_location = new Random(RNG_seed)

//create a edrive stimulation protocol to activate the exciatory synapse 
objref edrive
apic[90] edrive = new NetStimm(0.5)
edrive.number = 1e+10
objref x1
x1=new Random(RNG_seed)
edrive.start = 400*x1.discunif(0,400)/100
edrive.noise= 1 
edrive.interval =1000/E_frequency
objref enc[number_of_synapse]//enc is the NetCon target for the edrive




//build a function to randomly assign (number_of_synapse) to distal dendrites
proc build_excitatory_synapses() {


objref synapse[number_of_synapse] 
objref enc[number_of_synapse]//enc is the NetCon target for the edrive
//make_synapse and make variables are used exclusively in this function
make_synapse=0
synapse_segment = new Vector(number_of_synapse, 0) //range 0 to number_of_synapse-1
synapse_location = new Vector(number_of_synapse, 0)
tag = 0
//print "test3"
print "                                                                             "
print "Distances of excitatory inputs"
while (make_synapse<number_of_synapse) {apical_segment = random_segment.discunif(0, apicalCompart)
			      apical_location = random_location.discunif(1, 99)/100
			      soma distance(0, 0.5)
			      access apic[apical_segment]
                              dis = distance (apical_location)
                              //print apical_segment, synapse_segment.x[make_synapse], dis
                              if (dis > dborder) {for count= 0, make_synapse {if (apical_segment==synapse_segment.x[count]) {tag = 1} //check whether the input targets the same dendritic branch
							          //if there are redundancies, tag is set to 1
								   }
						  //print tag
                                                  if (tag != 1) {synapse_segment.x[make_synapse]=apical_segment  
					                       	synapse_location.x[make_synapse]=apical_location
								
								print dis
							        make_synapse = make_synapse+1}

						  }		
                    
                                          	tag = 0
			      }

print "Location of synapses: apical segment, position inside the segment"
for make_synapse=0, number_of_synapse-1 {print synapse_segment.x[make_synapse], synapse_location.x[make_synapse]}

//Build synapses
for make=0, number_of_synapse-1 {        //print "test"
					 access apic[synapse_segment.x[make]]
					 //print "test2"
			     		 synapse[make]= new Exp2Syn(synapse_location.x[make])
			      		 synapse[make].e=0
			      		 synapse[make].tau1=0.14
			      		 synapse[make].tau2=0.77  
					 enc[make] = new NetCon(edrive, synapse[make], 0, 0, 0) //the excitatory synapse will be activated when the value of edrive is higher than 0, with a delay of 0 ms
					 enc[make].weight=(5e-4)
					 }
//connect these synapses to a NetCon for producing inputs
//make a new graph()
//g == None

/*
objref g
g = new Graph()
addplot (g, 0)
g.size (0, stoptime, -90, 50)
g.addvar("soma.v(0.5)", 1,1, 0.6, 0.9, 2)


for make=0, number_of_synapse-1 {sprint (graphname, "%s%g%s%g%s", "apic[",synapse_segment.x[make], "].v(", synapse_location.x[make], ")")
     				 print graphname
				 g.addvar(graphname, make,1, 0.6, 0.9, 2)
				 }

*/
 
}

//add an inhibitory synapse to the soma
objref Isynapse, idrive, inc
access soma
soma_surface_area = area(0.5) //unit is um2, obtain the area of the somatic membrane
proc build_inhibitory_synapses() {access soma
								  Isynapse = new shunt(0.5)
							      Isynapse.del=0
							      Isynapse.dur=tstop
							      Isynapse.e=-75
							      Isynapse.g=0.0031/20*number_of_inhibitory_synapse*1000 //*1000 is because the conductance in shunt.mod is ns when compared to NetCon (uS)
					 
				  }





//--------------------------------------------------------

//for b=0, number_of_synapse-1 enc[b].weight=0
//inc.weight=0

access soma
objref I_inj
I_inj = new IClamp(0.5)
I_inj.del = 100
I_inj.dur = stoptime-100



objref APtime, recAP
access soma
APtime = new APCount(0.5)
APtime.thresh = 0
recAP = new Vector(5000,0)
APtime.record(recAP)

print "XXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXXX"

//create two vectors to store the AP frequency and corresponding tonic current input
objref F, I_input
F = new Vector(50, 0)
I_input = new Vector(100,0)

//define a string for the name of the output file
strdef fname
objref I_O





//-------------------------------------------------------------------------------------------------------------------------


number_of_synapse=20
number_of_inhibitory_synapse=35
build_inhibitory_synapses()
build_excitatory_synapses()

objref vrec
vrec= new Vector()
access soma
vrec.record(&v(0.5))

//create a function to save the membrane potential
proc make_output_V() {$o2 = new File()
		       $o2.wopen($s1)
		       vrec.printf($o2)
		       $o2.close}


objref g
g = new Graph()
addplot (g, 0)

objref spike_time
spike_time=new Vector()
proc make_output_APtime() {$o2 = new File()
		       $o2.wopen($s1)
		       spike_time.printf($o2)
		       $o2.close}


proc simulate() {
		 
		   for drive = 1, 30 {	
		   print drive
		   I_inj.amp = (0.75/30)*drive
           init()
		   g.size (0, stoptime/dt, -90, 50)
		   access soma
		   APtime = new APCount(0.5)
		   APtime.thresh = 0
           recAP = new Vector(5000,0)
           APtime.record(recAP)
			
		   total_duration=stoptime/dt
		   sample=0	
		   Isynapse.g=0
		   for a=0, number_of_synapse-1 enc[a].weight=0
		   connection_on=0
		   progress = 10
		   while (sample<total_duration) {if (sample>11000)  {if (connection_on==0) {Isynapse.g=0.0031/20*number_of_inhibitory_synapse*1000
																					 for a=0, number_of_synapse-1 enc[a].weight=(5e-4)
																					 connection_on=1}}
										  if (sample>16000) {if (connection_on==1) 	{Isynapse.g=0
																					 for a=0, number_of_synapse-1 enc[a].weight=0
																					 connection_on=0}}										
						fadvance() 
						sample=sample+1 
						if (sample>progress/100*total_duration) { print "trial ", drive, ", ", progress, "% progress" progress=progress+10}

					
						}
		   
		  //write the somatic membrane potential to the disk
		  sprint (fname, "%s%g%s", "B3_drive=", drive,".txt")
		  //make_output_V(fname,I_O)
		  //vrec.plot(g)
		  
		  spike_time=new Vector(APtime.n,0)
		  non_zero=0
		  for x2=0, APtime.n-1 {if (recAP.x[x2]!=0) {spike_time.x[non_zero]=recAP.x[x2] non_zero=non_zero+1}}
		  if (APtime.n==0) {spike_time=new Vector(1, 0) spike_time.x[0]=10000}
		  sprint (fname, "%s%g%s", "BC3_drive=", drive,"_APtime.txt")
		  make_output_APtime(fname,I_O)
		  
		   
	      print "AP frequency = ", APtime.n/(stoptime-100)*1000
		  if ((APtime.n/(stoptime-100)*1000)>300) {break}
                   }


}





simulate()